PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'trials': '6'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = MI_combinedtrials
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
    RoutineSettingsComponent trial
      stopVal [duration (s)] = 11
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    CodeComponent trial_code
      Code Type = Py
      Begin Experiment:
        #assert  int(expInfo['trials']) % 3 == 0, "Expected a multiple of three"

        trialCount = int(expInfo['trials'])# // 3
        first =  [90] * max(0, trialCount-10) + [180] * max(0, trialCount-10) + [270] * max(0, trialCount-10)
        last  =  [90] * min(10, trialCount) + [180] * min(10, trialCount) + [270] * min(10, trialCount)
        shuffle(first), shuffle(last) # from random import shuffle
        directions = first + last

        from time import time
        thisExp.addData("timeBeginExp", time())

        from pylsl import StreamOutlet, StreamInfo

        info = StreamInfo(name="psychopy", type="Markers", channel_count=2, source_id="1991919")
                        #source_id=f"session_{expInfo['session']}_participant_{expInfo['participant']}")
        info.desc().append_child_value("participant_id", f"{expInfo['participant']}")
        info.desc().append_child_value("session_id", f"{expInfo['session']}")
        info.desc().append_child_value("num_trials", f"{expInfo['trials']}")
        info.desc().append_child_value("total_trials", str(len(directions)))
        outlet = StreamOutlet(info)

        markers = {'test' : 99, 'exit' : 86, 'cross' : 1, 'cue' : 2, 'arrow' : 3, 'blank' : 4}

        # Test the stream
        for _ in range(6):
            outlet.push_sample([markers['test'], markers['test']], time())
            core.wait(0.5)
      Begin Routine:
        direction = directions.pop()

        outlet.push_sample([direction, direction], time())
        thisExp.addData("timeBeginRout", time())
      Each Frame:
        if cross.status == STARTED and cue.status != STARTED:
            outlet.push_sample([markers['cross'], direction], time())
        elif cue.status == STARTED:
            outlet.push_sample([markers['cue'], direction], time())
        elif arrow.status == STARTED:
            outlet.push_sample([markers['arrow'], direction], time())
        else:
            outlet.push_sample([markers['blank'], direction], time())
      End Experiment:
        for _ in range(6):
            outlet.push_sample([markers['exit'], markers['exit']], time())
            core.wait(0.5)
    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    SoundComponent cue
      sound = A
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
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    PolygonComponent arrow
      durationEstim = 5
      fillColor = white
      ori [set every repeat] = direction
      shape = arrow
      size = (0.5, 0.5)
      startVal [time (s)] = 4
      stopVal [duration (s)] = random()+4
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = trialCount*3
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    Routine trial
  LoopTerminator trials
