PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'trials': '6'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = MI_Trials
  keyboardBackend = PsychToolbox
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Routines
  Routine wait
    RoutineSettingsComponent wait
      stopVal [duration (s)] = 3
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  Routine cross
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine arrow
    RoutineSettingsComponent arrow
      stopVal [duration (s)] = 5
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        assert  int(expInfo['trials']) % 3 == 0, "Expected a multiple of three"

        trialCount = int(expInfo['trials']) // 3
        directions = [0] * trialCount + [90] * trialCount + [270] * trialCount
        shuffle(directions)

        import time
        thisExp.addData("timeBeginExp", time.time())
      Begin Routine:
        direction = directions.pop()

        thisExp.addData("timeBeginRout", time.time())
    PolygonComponent arr
      fillColor = white
      ori [set every repeat] = direction
      shape = arrow
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+4
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    SoundComponent cue
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = trialCount*3
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    Routine cross
    Routine arrow
    Routine wait
  LoopTerminator trials
